PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  color = 0.8039, 0.8039, 0.9608
  expName = Solo Project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent Instructions1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Thank you for participating in this experiment!

        You will be shown 2 videos of car accidents, followed by 2 questions.
        Please answer to the best of your ability.

        Press the SPACE key to continue to the video.
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Car_Crash_Footage
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    MovieComponent carcrash
      backend = ffpyplayer
      forceEndRoutine = True
      movie = Video 1.mp4
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
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  Routine Question_a1
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    TextComponent q1
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What was the colour of the car in the video?
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    TextboxComponent answer1
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text1
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse_2
      clickable = submit_text1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Question_a2
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    TextComponent q2
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = About how fast was the car going when it contacted with the other car?
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    TextboxComponent answer
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Car_Crash_Footage_2
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    MovieComponent carcrash2
      backend = ffpyplayer
      forceEndRoutine = True
      movie = Video 2.mp4
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
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  Routine Question_b2
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you see any broken glass?
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    TextComponent submit_text_2
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the 'Y' key for YES
        Press the 'N' key for NO
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Transition
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    TextComponent transition1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the SPACE key to play the next video.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Conclusion
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    TextComponent debrief
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for participating!

        You may ask to view your results.

        This experiment attempts to determine whether leading questions and the intensity of background colour can affect the memory of the participant.
  Routine Question_b1
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    TextComponent text2
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How was the weather like in the video?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse_3
      clickable = submit_text2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Question_a3
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    TextComponent text3
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How many total cars did you see in the video?
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    TextboxComponent answer_2
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here to submit
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    MouseComponent mouse_4
      clickable = submit_text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Question_b3
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Was it the white car's fault?
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    TextComponent submit_text_4
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the 'Y' key for YES
        Press the 'N' key for NO
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Car_Crash_Footage
  Routine Question_a1
  Routine Question_a2
  Routine Question_a3
  Routine Transition
  Routine Car_Crash_Footage_2
  Routine Question_b3
  Routine Question_b1
  Routine Question_b2
  Routine Conclusion
