<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2025.1.1">
  <Settings>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="Thank you for your patience." valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;', 'session': '001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="False" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="False" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[1000, 600]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="float" valType="str" updates="None" name="clockFormat"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="warning" valType="code" updates="None" name="consoleLoggingLevel"/>
    <Param val="default" valType="str" updates="None" name="ecSampleRate"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="Adaptive Staircase Experiment - Tutorial 1.0" valType="str" updates="None" name="expName"/>
    <Param val="" valType="str" updates="None" name="expVersion"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="" valType="code" updates="None" name="frameRate"/>
    <Param val="Attempting to measure frame rate of screen, please wait..." valType="str" updates="None" name="frameRateMsg"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="PsychToolbox" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="info" valType="code" updates="None" name="logging level"/>
    <Param val="True" valType="bool" updates="None" name="measureFrameRate"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="1" valType="code" updates="None" name="runMode"/>
    <Param val="False" valType="bool" updates="None" name="rush"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="False" valType="code" updates="None" name="forceNonSlip"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <CodeComponent name="var_5050probcode" plugin="None">
        <Param val="" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="if ((Math.random() &gt; 0.5)) {&amp;#10;    direction = (- level);&amp;#10;    correct_response = &quot;left&quot;;&amp;#10;} else {&amp;#10;    direction = level;&amp;#10;    correct_response = &quot;right&quot;;&amp;#10;}&amp;#10;" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="if random() &gt; 0.5:&amp;#10;    direction = -level&amp;#10;    correct_response = 'left'&amp;#10;else:&amp;#10;    direction = level&amp;#10;    correct_response = 'right'" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Auto-&gt;JS" valType="str" updates="None" name="Code Type"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="psychoJS.experiment.addData(&quot;corrAns&quot;, correct_response);&amp;#10;psychoJS.experiment.addData(&quot;tilt&quot;, direction);&amp;#10;psychoJS.experiment.addData(&quot;key_resp.corr&quot;, key_resp.corr);&amp;#10;" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="thisExp.addData('corrAns', correct_response)&amp;#10;thisExp.addData('tilt', direction)&amp;#10;thisExp.addData('key_resp.corr', key_resp.corr)" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="var_5050probcode" valType="code" updates="None" name="name"/>
      </CodeComponent>
      <PolygonComponent name="Fixation" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="False" valType="code" updates="constant" name="draggable"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="white" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="white" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="Fixation" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="cross" valType="str" updates="None" name="shape"/>
        <Param val="(0.1, 0.1)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="time (s)" valType="str" updates="None" name="stopType"/>
        <Param val="0.5" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <GratingComponent name="grating" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="avg" valType="str" updates="constant" name="blendmode"/>
        <Param val="$[1,1,1]" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="0.5" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="False" valType="code" updates="constant" name="draggable"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="gauss" valType="file" updates="constant" name="mask"/>
        <Param val="grating" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="direction" valType="num" updates="set every repeat" name="ori"/>
        <Param val="0.0" valType="num" updates="constant" name="phase"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="8" valType="num" updates="constant" name="sf"/>
        <Param val="(0.3, 0.3)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.5" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="sin" valType="file" updates="constant" name="tex"/>
        <Param val="128" valType="num" updates="constant" name="texture resolution"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
      </GratingComponent>
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'left','right'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="$correct_response" valType="str" updates="constant" name="correctAns"/>
        <Param val="" valType="str" updates="None" name="deviceLabel"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.5" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="True" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
    </Routine>
  </Routines>
  <Flow>
    <LoopInitiator loopType="StairHandler" name="staircase">
      <Param name="N down" updates="None" val="3" valType="num"/>
      <Param name="N reversals" updates="None" val="" valType="num"/>
      <Param name="N up" updates="None" val="1" valType="num"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="staircase" valType="str"/>
      <Param name="max value" updates="None" val="20" valType="num"/>
      <Param name="min value" updates="None" val="1" valType="num"/>
      <Param name="nReps" updates="None" val="1" valType="num"/>
      <Param name="name" updates="None" val="staircase" valType="code"/>
      <Param name="start value" updates="None" val="10" valType="num"/>
      <Param name="step sizes" updates="None" val="[2,1,1,0.5]" valType="list"/>
      <Param name="step type" updates="None" val="lin" valType="str"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="staircase"/>
  </Flow>
</PsychoPy2experiment>
